# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Cryogenic Magnet
interface: Serial
address: ASRL3::INSTR

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Cryogenic Magnet

[Model and options]
check_model: false

# General VISA settings for the instrument.
use_visa: True
term_char: CR+LF
baud_rate: 9600
data_bits: 8
stop_bits: 1
parity: No parity
reset: True
timeout: 5
suppress_end_on_read: True
query_instr_errors: False


# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
# init: UPDATE

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
# str_true: ON
# str_false: OFF

# Final commands sent to the instrument when closing the driver
# final:


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
[Bz]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
#sweep_cmd:
#***REPEAT SET*** 1.0
#sweep_res: 0.001
sweep_check_cmd:

[BzRate]
datatype: DOUBLE
unit: T/s
get_cmd:
set_cmd:
def_value: 0.0585

[BzSwitchHeater]
label: Switch Heater Bz
datatype: BOOLEAN
get_cmd:
set_cmd:
def_value: True
